\Aug 31, 2017
\Sandra Talbot . Itzik Nahmoud (STIN)
\Differential Fear Conditioning Testing (DFC TEST) - Day 4


\12 trials, CS+/CS- pseudo-randomized
\CS+: 7kHz pips, 30 sec of pips ; CS-: 1kHz pips, 30 sec of pips, houselight codelivered
\Light: 72 lux

\Outputs
^CS Tone Box One = 6
^CS Tone Box Two = 1
^GridFloor Box One = 8
^GridFloor Box Two = 4

^FreqOne    = 0
^FreqSeven  = 1
^Amp        = 2
^RF         = 3
^Dur        = 4

DIM A = 4



\Inter stimulus (CS) intervals
List Z = 50"



S.S.1,
S1,
    0.001": SET A(^FreqOne) = 1000, A(^FreqSeven) = 7000, A(^Amp)= 100, A(^RF) = 2, A(^Dur) = 46 ---> S1




S.S.2,       \ 6 CS+, 6 CS- protocol

S1,
          #START: ~InitANL926;~;                    \resetting ANL926
                  ~SetAMP(MG, BOX, A [2]);~;        \initialze amplitude (dB)
                  ~SetRF(MG, BOX, A [3]);~;         \set Rise and Fall  (msec)
                  ~SetDur(MG,BOX, A [4]);~;         \set duration of tone (msec)
                  RANDI B = Z ---> S2


S2, \60, 90, 120 sec from List Z
     B#T: SHOW 1,Start to 1st ISI (sec),B/100 ---> S3

S3,                                                                                         \one CS plus
    1": ADD C;
        IF C <= 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A[1]);~;
                     ON ^CS Tone Box One, ^CS Tone Box Two ---> S3
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two;
                     RANDI B = Z ---> S4

S4,
    B#T: SHOW 6, 1st ISI (sec), B/100 ---> S5

S5,                                                                                         \Two CS minus
        1": ADD D;
        IF D <= 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A [0]);~;
             ON ^CS Tone Box One, ^CS Tone Box Two ---> S5
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two; RANDI B = Z ---> S6
S6,
    B#T: SHOW 11, 2nd ISI (sec), B/100  ---> S7

S7,                                                                                        \ Three CS minus
    1": ADD E;
        IF E <= 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A [0]);~;
                 ON ^CS Tone Box One, ^CS Tone Box Two ---> S7
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two; RANDI B = Z ---> S8

S8,
     B#T: SHOW 16, 3rd ISI (sec), B/100 ---> S9

S9,                                                                                     \ Four CS plus
1": ADD F;
        IF F <= 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A [1]);~;
                      ON ^CS Tone Box One, ^CS Tone Box Two ---> S9
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two; RANDI B = Z ---> S10

S10,
    B#T: SHOW 21, 4th ISI (sec), B/100 ---> S11

S11,                                                                                   \ Five CS minus
    1": ADD H;
        IF H <= 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A[0]);~;
                     ON ^CS Tone Box One, ^CS Tone Box Two ---> S11
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two; RANDI B = Z ---> S12

S12,
    B#T: SHOW 26, 5th ISI (sec), B/100 ---> S13

S13,                                                                                    \six CS plus
       1": ADD I;
       IF I <= 30 [@True, @False]
            @True: ~ONFreq(MG, BOX, A [1]);~;
                     ON ^CS Tone Box One, ^CS Tone Box Two ---> S13
            @False: OFF ^CS Tone Box One, ^CS Tone Box Two; RANDI B = Z ---> S14

S14,
    B#T: SHOW 31, 6th ISI (sec), B/100  ---> S15

S15,                                                                                     \ seven CS minus
    1": ADD J;
        IF J <= 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A [0]);~;
                     ON ^CS Tone Box One, ^CS Tone Box Two ---> S15
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two; RANDI B = Z ---> S16

S16,
     B#T: SHOW 36, 7th ISI (sec), B/100  ---> S17

S17,
    1": ADD K;                                                                              \eight CS plus
        IF K <= 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A [1]);~;
                     ON ^CS Tone Box One, ^CS Tone Box Two ---> S17
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two; RANDI B = Z ---> S18

S18,
    B#T: SHOW 41, 8th ISI (sec), B/100  ---> S19

S19,                                                                                          \nine CS minus
     1": ADD L;
         IF L <= 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A[0]);~;
                    ON ^CS Tone Box One, ^CS Tone Box Two ---> S19
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two; RANDI B = Z ---> S20

S20,
    B#T: SHOW 46, 9th ISI (sec), B/100 ---> S21

S21,
    1": ADD M;                                                                             \ten CS minus
        IF M <= 30 [@True, @False]
            @True: ~ONFreq(MG, BOX, A[0]);~;
                    ON ^CS Tone Box One, ^CS Tone Box Two ---> S21
            @False: OFF ^CS Tone Box One, ^CS Tone Box Two; RANDI B = Z ---> S22

S22,
    B#T: SHOW 51, 10th ISI (sec), B/100 ---> S23

S23,                                                                                          \eleven CS plus
    1": ADD N;
        IF N <= 30 [@True, @False]
            @True: ~ONFreq(MG, BOX, A[1]);~;
                     ON ^CS Tone Box One, ^CS Tone Box Two ---> S23
            @False: OFF ^CS Tone Box One, ^CS Tone Box Two; RANDI B = Z ---> S24

S24,
    B#T: SHOW 56, 11th ISI (sec), B/100  ---> S25

S25,
     1": ADD O;                                                                              \twelve CS plus
         IF O <= 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A[1]);~;
                     ON ^CS Tone Box One, ^CS Tone Box Two ---> S25
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two; RANDI B = Z ---> S26


S26,
    B#T: SHOW 61, END (sec), B/100 ---> STOPABORTFLUSH

S.S.3,

S1,
    #START: ---> S2
S2,
    1": ADD P; SHOW 2, Session Time (sec), P ---> S2

S.S.4
    S1,                                         \1st CS      Syntax: SHOW P1,P2,P3 as per page 106 in MED PC Programmer's Manual. Note that P3 cannot contain words such as "plus" or "minus" which is why the pertinent info is completely contained in P2. P3 is negligible
    0.001": SHOW 3, CS Plus VB, 0 ---> S2
    S2,
    0.001": SHOW 4, Tone kHz, 7  ---> S3
    S3,                                          \2nd CS
    0.001": SHOW 8, CS Plus VA, 0 ---> S4
    S4,
    0.001": SHOW 9, Tone kHz, 1 ---> S5
    S5,                                          \3rd CS
    0.001": SHOW 13, CS Plus VA, 0 ---> S6
    S6,
    0.001": SHOW 14, Tone kHz, 1 ---> S7
    S7,                                           \4th CS
    0.001": SHOW 18, CS Plus VB, 0 ---> S8
    S8,
    0.001": SHOW 19, Tone kHz, 7  ---> S9
    S9,                                            \5th CS
    0.001": SHOW 23, CS Plus VA, 0 ---> S10
    S10,
    0.001": SHOW 24, Tone kHz, 1 ---> S11
    S11,                                           \6th CS
    0.001": SHOW 28, CS Plus VB, 0 ---> S12
    S12,
    0.001": SHOW 29, Tone kHz, 7  ---> S13
    S13,                                           \7th CS
    0.001": SHOW 33, CS Plus VA, 0 ---> S14
    S14,
    0.001": SHOW 34, Tone kHz, 1 ---> S15
    S15,                                           \8th CS
    0.001": SHOW 38, CS Plus VB, 0 ---> S16
    S16,
    0.001": SHOW 39, Tone kHz, 7  ---> S17
    S17,                                           \9th CS
    0.001": SHOW 43, CS Plus VA, 0 ---> S18
    S18,
    0.001": SHOW 44, Tone kHz, 1 ---> S19
    S19,                                           \10th CS
    0.001": SHOW 48, CS Plus VA, 0 ---> S20
    S20,
    0.001": SHOW 49, Tone kHz, 1 ---> S21
    S21,                                            \11th CS
    0.001": SHOW 53, CS Plus VB, 0 ---> S22
    S22,
    0.001": SHOW 54, Tone kHz, 7  ---> S23
    S23,                                            \12th CS
    0.001": SHOW 58, CS Plus VB, 0 ---> S24
    S24,
    0.001": SHOW 59, Tone kHz, 7 ---> SX
