\Aug 30, 2017
\Sandra Talbot . Itzik Nahmoud (STIN)
\OPEN FIELD (OF) AND ELEVATED PLUS MAZE (EPM) TESTING - Day 6

\3 TRIALS WITH NO TONE CS AND 3 TRIALS WITH TONE CS (60 SECOND CS ON-OFF INTERVALS)
\Light: 72 lux

\Outputs
^CS Tone Box One = 6
^CS Tone Box Two = 1
^HouseLight Box One = 7
^HouseLight Box Two = 2
^GridFloor Box One = 8
^GridFloor Box Two = 4


^FreqTwo    = 0
^FreqSeven  = 1
^Amp        = 2
^RF         = 3
^Dur        = 4

DIM A = 4


S.S.1,
S1,
  0.001": SET A(^FreqTwo) = 2000, A(^FreqSeven) = 8000, A(^Amp)= 100, A(^RF) = 2, A(^Dur) = 46 ---> S1

S.S.2,
S1,
    #START: ~InitANL926;~;                    \resetting ANL926
            ~SetAMP(MG, BOX, A [2]);~;        \initialze amplitude (dB)
            ~SetRF(MG, BOX, A [3]);~;         \set Rise and Fall  (msec)
            ~SetDur(MG,BOX, A [4]);~;         \set duration of tone (msec)
             ---> S2
S2,
   60": SHOW 1, 1st neutral trial (sec), 60 ---> S3

S3,
     1": ADD B;
        IF B <= 60 [@True, @False]
             @True: ~ONFreq(MG, BOX, A [0]);~;
             ON ^CS Tone Box One, ^CS Tone Box Two, ^HouseLight Box One, ^HouseLight Box Two  ; SHOW 6, 1st safety trial (sec), 60 ---> S3
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two, ^HouseLight Box One, ^HouseLight Box Two  ---> S4

S4,
    60": SHOW 11, 2nd neutral trial (sec), 60 ---> S5

S5,
    1": ADD C;
        IF C <= 60 [@True, @False]
             @True: ~ONFreq(MG, BOX, A [0]);~;
             ON ^CS Tone Box One, ^CS Tone Box Two, ^HouseLight Box One, ^HouseLight Box Two ; SHOW 16, 2nd safety trial (sec), 60 ---> S5
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two, ^HouseLight Box One, ^HouseLight Box Two  ---> S6

S6,
    60": SHOW 21, 3rd neutral trial (sec), 60 ---> S7

S7,
    1": ADD D;
        IF D <= 60 [@True, @False]
             @True: ~ONFreq(MG, BOX, A [0]);~;
             ON ^CS Tone Box One, ^CS Tone Box Two, ^HouseLight Box One, ^HouseLight Box Two ; SHOW 26, 3rd safety trial (sec), 60 ---> S7
             @False: OFF ^CS Tone Box One, ^CS Tone Box Two, ^HouseLight Box One, ^HouseLight Box Two  ---> STOPABORTFLUSH


S.S.3,
S1,
    #START: ---> S2

S2,
    1": ADD E; SHOW 2, Session Time (sec), E ---> S2
