\Testing - 8kHz pips and laser coterminated
\January 18, 2017

\Differential Fear Conditioning Testing

\5 trials of CS+ co-delivered with the laser, laser starts 5 seconds prior to pips, 30 seconds of pips and laser codeliverd
\inter stimulus intervals of 60, 80, 100, 120 seconds from listZ with replacement

\Outputs
^Laser = 5
^CS Tone = 6
^HouseLight = 7
^GridFloor  = 8

^FreqTwo    = 0
^FreqEight  = 1
^Amp        = 2
^RF         = 3
^Dur        = 4

DIM A = 4

\Var_Alias Frequency of the Tone (Hz)      = A (0)  \ Default = 2000 Hz
\Var_Alias Frequency of the Tone (Hz)      = A (1)  \ Default = 8000 Hz
\Var_Alias Amplitude of the Tone (dB)      = A (2)  \ Default = 100 dB
\Var_Alias Rise/Fall Time of the Tone (ms) = A (3)  \ Default = 10 ms
\Var_Alias Tone On Time    (sec)           = A (4)  \ Default = 0.05 seconds
\Var_Alias Start to 1st CS (sec)           = B      \ Default from List Z
\Var_Alias 1st to 2nd CS   (sec)           = B      \ Default from List Z
\Var_Alias 2nd to 3rd CS   (sec)           = B     \ Default from List Z
\Var_Alias 3rd to 4th CS   (sec)           = B     \ Default from List Z
\Var_Alias 4th to 5th CS   (sec)           = B      \ Default from List Z
\Var_Alias 5th to 6th CS   (sec)           = B      \ Default from List Z
\Var_Alias 6th to 7th CS   (sec)           = B      \ Default from List Z
\Var_Alias 7th to 8th CS   (sec)           = B      \ Default from List Z
\Var_Alias 8th to 9th CS   (sec)           = B      \ Default from List Z
\Var_Alias 9th to 10th CS  (sec)           = B      \ Default from List Z
\Var_Alias 10th to 11th CS (sec)           = B      \ Default from List Z
\Var_Alias 11th to 12th CS (sec)           = B      \ Default from List Z
\Var_Alias 12th to end     (sec)           = B      \ Default from List Z


\Inter stimulus (CS) intervals
List Z = 60", 80", 100", 120"



S.S.1,
S1,
        0.001": SET A(^FreqTwo) = 2000, A(^FreqEight) = 7000, A(^Amp)= 100, A(^RF) = 2 , A(^Dur) = 46 ---> SX



S.S.2,       \ 5 CS trials

S1,
          #START: ~InitANL926;~;                    \resetting ANL926
                  ~SetAMP(MG, BOX, A [2]);~;        \initialze amplitude (dB)
                  ~SetRF(MG, BOX, A [3]);~;         \set Rise and Fall  (msec)
                  ~SetDur(MG,BOX, A [4]);~;         \set duration of tone (msec)
                   ---> S2
S2,
    115": ON ^Laser ---> S3



S3, \2 minutes until 1st CS+
     4": SHOW 1, Start to 1st ISI (sec), 120 ---> S4

S4,                                                                                         \first CS
    1": ADD C;
        IF C < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A[1]);~;
                     ON ^CS Tone ---> S4
             @False: IF C = 30 [@True]
                     @True: ~ONFreq(MG, BOX, A[1]);~;
                     ON ^CS Tone ---> S5
S5,
    1": OFF ^CS Tone, ^Laser ;  RANDI B = Z ; SET E = B - 5" ---> S6

S6,
    E#T: ON ^Laser ---> S7

S7,
     4": SHOW 6, 1st ISI (sec), B/100 ---> S8

S8,                                                                                     \second CS
1": ADD F;
        IF F < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A [1]);~;
                     ON ^CS Tone ---> S8
             @False: IF F = 30 [@True]
                     @True: ~ONFreq(MG, BOX, A [1]);~;
                     ON ^CS Tone ---> S9

S9,
    1": OFF ^CS Tone, ^Laser; RANDI B = Z ; SET E = B - 5" ---> S10

S10,
    E#T: ON ^Laser ---> S11

S11,
    4": SHOW 11, 2nd ISI (sec), B/100 ---> S12

S12,                                                                                    \third CS
       1": ADD I;
       IF I < 30 [@True, @False]
            @True: ~ONFreq(MG, BOX, A [1]);~;
                    ON ^CS Tone ---> S12
            @False: IF I = 30 [@True]
                    @True: ~ONFreq(MG, BOX, A [1]);~;
                    ON ^CS Tone ---> S13

S13,
   1": OFF ^CS Tone, ^Laser ; RANDI B = Z ; SET E = B - 5"---> S14

S14,
    E#T: ON ^Laser ---> S15

S15,
     4": SHOW 16, 3rd ISI (sec), B/100 ---> S16

S16,
    1": ADD K;                                                                              \fourth CS
        IF K < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A [1]);~;
                     ON ^CS Tone ---> S16
             @False: IF K = 30 [@True]
                     @True: ~ONFreq(MG, BOX, A [1]);~;
                     ON ^CS Tone ---> S17

S17,
    1": OFF ^CS Tone, ^Laser ; RANDI B = Z ; SET E = B - 5 ---> S18

S18,
    E#T: ON ^Laser ---> S19

S19,
    4": SHOW 21, 4th ISI (sec), B/100 ---> S20

S20,
     1": ADD O;                                                                              \Fifth CS
         IF O < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, A[1]);~;
                     ON ^CS Tone ---> S20
             @False: IF O = 30 [@True]
                     @True: ~ONFreq(MG, Box, A[1]);~;
                     ON ^CS Tone ---> S21

S21,
    1": OFF ^CS Tone, ^Laser; RANDI B = Z ---> S22
S22,
    B#T: SHOW 26, 5th CS+ to END (sec), B/100 ---> STOPABORTFLUSH

S.S.3,
S1,
    #START: ---> S2

S2,
    1": ADD P; SHOW 2, Session Time, P ---> S2
