\February 07, 2019
\Itzik Nahmoud (IN)
\Contextual Testing - Day 5

\Subjects receive 5 trials of CS ONLY
\Light: 30 lux



\Outputs
^CS Tone Box One = 6
^CS Tone Box Two = 1



^FreqFour   = 0
^FreqSeven  = 1
^Amp        = 2
^RF         = 3
^Dur        = 4

DIM A = 4



\Inter stimulus (CS) intervals
List Z = 60", 80", 100", 120"

S.S.1,
S1,
        0.001": SET A(^FreqFour) = 4000, A(^FreqSeven) = 7000, A(^Amp)= 100, A(^RF) = 2 , A(^Dur) = 46 ---> SX


S.S.2,       \ 5 CS trials

S1,
          #START: ~InitANL926;~;                    \resetting ANL926
                  ~SetAMP(MG, BOX, A [2]);~;        \initialze amplitude (dB)
                  ~SetRF(MG, BOX, A [3]);~;         \set Rise and Fall  (msec)
                  ~SetDur(MG,BOX, A [4]);~;         \set duration of tone (msec)
                  RANDI B = Z ---> S2


S2, \2 minutes until 1st CS+
     2': SHOW 1, Start to 1st ISI (sec), 120 ---> S3

S3,                                                                                         \first CS
    1": ADD C;
        IF C < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, 1000);~;
                     ON ^CS Tone Box one, ^CS Tone Box Two   ---> S3
             @False: IF C = 30 [@True]
                     @True: ~ONFreq(MG, BOX, 1000);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two; SET C = 0 ---> S4
S4,
    1": OFF ^CS Tone Box one, ^CS Tone Box Two; RANDI B = Z  ---> S5

S5,
     B#T: SHOW 6, 1st ISI (sec), B/100 ---> S6

S6,                                                                                     \second CS
1": ADD F;
        IF F < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, 2000);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two ---> S6
             @False: IF F = 30 [@True]
                     @True: ~ONFreq(MG, BOX, 2000);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two; SET F = 0---> S7

S7,
    1": OFF ^CS Tone Box one, ^CS Tone Box Two; RANDI B = Z ---> S8

S8,
     B#T: SHOW 11, 1st ISI (sec), B/100 ---> S9



S9,                                                                                    \third CS
       1": ADD I;
       IF I < 30 [@True, @False]
            @True: ~ONFreq(MG, BOX, 2820);~;
                     ON ^CS Tone Box one, ^CS Tone Box Two ---> S9
            @False: IF I = 30 [@True]
                    @True: ~ONFreq(MG, BOX, 2820);~;
                     ON ^CS Tone Box one, ^CS Tone Box Two; SET I = 0 ---> S10

S10,
   1": OFF ^CS Tone Box one, ^CS Tone Box Two; RANDI B = Z ---> S11

S11,
     B#T: SHOW 16, 1st ISI (sec), B/100 ---> S12


S12,
    1": ADD K;                                                                              \fourth CS
        IF K < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, 5650);~;
                     ON ^CS Tone Box one, ^CS Tone Box Two ---> S12
             @False: IF K = 30 [@True]
                     @True: ~ONFreq(MG, BOX, 5650);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two; SET K = 0 ---> S13

S13,
    1": OFF ^CS Tone Box one, ^CS Tone Box Two; RANDI B = Z  ---> S14

S14,
     B#T: SHOW 21, 1st ISI (sec), B/100 ---> S15


S15,
     1": ADD O;                                                                              \Fifth CS
         IF O < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, 8000);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two ---> S15
             @False: IF O = 30 [@True]
                     @True: ~ONFreq(MG, Box, 8000);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two; SET O = 0 ---> S16

S16,
    1": OFF ^CS Tone Box one, ^CS Tone Box Two; RANDI B = Z ---> S17



S17, \2 minutes until 1st CS+
     B#T: SHOW 26, Start to 1st ISI (sec), 120 ---> S18

S18,                                                                                         \first CS
    1": ADD C;
        IF C < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, 11310);~;
                     ON ^CS Tone Box one, ^CS Tone Box Two   ---> S18
             @False: IF C = 30 [@True]
                     @True: ~ONFreq(MG, BOX, 11310);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two; SET C = 0 ---> S19
S19,
    1": OFF ^CS Tone Box one, ^CS Tone Box Two; RANDI B = Z  ---> S20

S20,
     B#T: SHOW 31, 1st ISI (sec), B/100 ---> S21

S21,                                                                                     \second CS
1": ADD F;
        IF F < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, 11310);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two ---> S21
             @False: IF F = 30 [@True]
                     @True: ~ONFreq(MG, BOX, 11310);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two; SET F = 0 ---> S22

S22,
    1": OFF ^CS Tone Box one, ^CS Tone Box Two; RANDI B = Z ---> S23

S23,
     B#T: SHOW 36, 1st ISI (sec), B/100 ---> S24

S24,                                                                                    \third CS
       1": ADD I;
       IF I < 30 [@True, @False]
            @True: ~ONFreq(MG, BOX, 8000);~;
                     ON ^CS Tone Box one, ^CS Tone Box Two ---> S24
            @False: IF I = 30 [@True]
                    @True: ~ONFreq(MG, BOX, 8000);~;
                     ON ^CS Tone Box one, ^CS Tone Box Two; SET I = 0 ---> S25

S25,
   1": OFF ^CS Tone Box one, ^CS Tone Box Two; RANDI B = Z ---> S26

S26,
     B#T: SHOW 41, 1st ISI (sec), B/100 ---> S27


S27,
    1": ADD K;                                                                              \fourth CS
        IF K < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, 5650);~;
                     ON ^CS Tone Box one, ^CS Tone Box Two ---> S27
             @False: IF K = 30 [@True]
                     @True: ~ONFreq(MG, BOX, 5650);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two; SET K = 0 ---> S28

S28,
    1": OFF ^CS Tone Box one, ^CS Tone Box Two; RANDI B = Z  ---> S29

S29,
     B#T: SHOW 46, 1st ISI (sec), B/100 ---> S30

S30,
     1": ADD O;                                                                              \Fifth CS
         IF O < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, 2820);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two ---> S30
             @False: IF O = 30 [@True]
                     @True: ~ONFreq(MG, Box, 2820);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two; SET O = 0 ---> S31

S31,
    1": OFF ^CS Tone Box one, ^CS Tone Box Two; RANDI B = Z ---> S32


S32,
    1": ADD P;                                                                              \fourth CS
        IF P < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, 5650);~;
                     ON ^CS Tone Box one, ^CS Tone Box Two ---> S32
             @False: IF P = 30 [@True]
                     @True: ~ONFreq(MG, BOX, 5650);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two; SET P = 0 ---> S33

S33,
    1": OFF ^CS Tone Box one, ^CS Tone Box Two; RANDI B = Z  ---> S34

S34,
     B#T: SHOW 46, 1st ISI (sec), B/100 ---> S35

S35,
     1": ADD Q;                                                                              \Fifth CS
         IF Q < 30 [@True, @False]
             @True: ~ONFreq(MG, BOX, 2820);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two ---> S35
             @False: IF Q = 30 [@True]
                     @True: ~ONFreq(MG, Box, 2820);~;
                      ON ^CS Tone Box one, ^CS Tone Box Two; SET Q = 0 ---> S36

S36,

    60": SHOW 51, 1st ISI (sec), B/100 ---> STOPABORTFLUSH

S.S.3,
S1,
    #START: ---> S2

S2,
    1": ADD P; SHOW 3, Session Time, P ---> S2


S.S.4,
    S1,                                          \1st tone      Syntax: SHOW P1,P2,P3 as per page 106 in MED PC Programmer's Manual. Note that P3 cannot contain words such as "plus" or "minus" which is why the pertinent info is completely contained in P2. P3 is negligible
    0.001": SHOW 2, 1kHz Tone ON (sec), 30 ---> S2
    S2,                                          \2nd tone
    0.001": SHOW 7, 2kHz Tone ON (sec), 30  ---> S3
    S3,                                          \3rd tone
    0.001": SHOW 12, 4kHz Tone ON (sec), 30 ---> S4
    S4,                                          \4th tone
    0.001": SHOW 17, 8kHz Tone ON (sec), 30 ---> S5
    S5,                                          \5th tone
    0.001": SHOW 22, 16kHz Tone ON (sec), 30 ---> SX
